private function A_UserInput(  ) void ;
private function B_CreateSequences(  ) void ;
private function C_LoadInstructions(  ) void ;
private function D_PipettingSteps(  ) void ;
private function _GetJSONValue( variable i_strFilePath, variable i_strSearch, variable i_intTrace, variable i_blnForceCheck, variable & o_arr[] ) variable ;
private function _GetLabwareParameters(  ) void ;
private function _GetPipelineVariables( variable i_strConfigFilePath, variable i_strPipeline ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function A_UserInput(  ) void {
  private variable rtnValue;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private variable intPipelineChoice;
  private variable loopCounter1;
  private variable arrAvailablePipelineSteps[];
  private dialog customDialog_3;
  private variable strConfigFilePath;
  private variable _;
  private variable arrPipelines[];
  private variable TRACE_LEVEL_DBUG;
  private dialog customDialog_4;
  private variable blnMethodDetails;
  private variable strJSONSearch;
  private variable __[];
  private dialog customDialog_5;
  private dialog customDialog_6;
  private dialog customDialog_7;
  private variable blnDetails_Step7;
  private variable blnDetails_Step8;
  private variable blnDetails_Step9;
  private variable blnDetails_Step1;
  private variable blnDetails_Step10;
  private variable blnDetails_Step2;
  private variable blnDetails_Step11;
  private variable blnDetails_Step3;
  private variable blnDetails_Step4;
  private variable blnDetails_Step5;
  private variable blnDetails_Step6;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                     USER INPUT: START\n**************************************************************************************************************************"));
  blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  intTraceLevel = TRACE_LEVEL_DEBUG;
  TRACELEVEL::SetTraceLevel(intTraceLevel);
  strConfigFilePath = Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\GenericSPRI\\MethodConfig.json");
  arrAvailablePipelineSteps.SetSize(0);
  JSONSEARCH::GetJSONEntry(strConfigFilePath, Translate("Approved_Pipelines"), intTraceLevel, arrAvailablePipelineSteps, _);
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      intPipelineChoice = 1;
      customDialog_3.InitCustomDialog("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");
      customDialog_3.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrAvailablePipelineSteps );
      customDialog_3.SetCustomDialogProperty( "comboBox1.SelectedIndex", intPipelineChoice );
      customDialog_3.ShowCustomDialog();
      rtnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
      intPipelineChoice = customDialog_3.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      blnMethodDetails = customDialog_3.GetCustomDialogProperty( "checkBox1.IsChecked" );
      if (rtnValue == 2)
      {
        abort;
      }
      _GetPipelineVariables(strConfigFilePath, arrAvailablePipelineSteps.ElementAt( intPipelineChoice -1));
      intNumberOfSourcePlates = 2;
      blnBindPlate = 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Pipeline step: "), arrAvailablePipelineSteps.ElementAt( intPipelineChoice -1));
      if (blnMethodDetails == 1)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            customDialog_5.InitCustomDialog("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");
            customDialog_5.SetCustomDialogProperty( "radioButton1.IsChecked", blnDetails_Step1 );
            customDialog_5.SetCustomDialogProperty( "radioButton2.IsChecked", blnDetails_Step2 );
            customDialog_5.SetCustomDialogProperty( "radioButton3.IsChecked", blnDetails_Step3 );
            customDialog_5.SetCustomDialogProperty( "radioButton4.IsChecked", blnDetails_Step4 );
            customDialog_5.SetCustomDialogProperty( "radioButton5.IsChecked", blnDetails_Step5 );
            customDialog_5.SetCustomDialogProperty( "radioButton6.IsChecked", blnDetails_Step6 );
            customDialog_5.SetCustomDialogProperty( "radioButton7.IsChecked", blnDetails_Step7 );
            customDialog_5.SetCustomDialogProperty( "radioButton8.IsChecked", blnDetails_Step8 );
            customDialog_5.SetCustomDialogProperty( "radioButton9.IsChecked", blnDetails_Step9 );
            customDialog_5.SetCustomDialogProperty( "radioButton10.IsChecked", blnDetails_Step10 );
            customDialog_5.SetCustomDialogProperty( "radioButton11.IsChecked", blnDetails_Step11 );
            customDialog_5.ShowCustomDialog();
            rtnValue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
            blnDetails_Step1 = customDialog_5.GetCustomDialogProperty( "radioButton1.IsChecked" );
            blnDetails_Step2 = customDialog_5.GetCustomDialogProperty( "radioButton2.IsChecked" );
            blnDetails_Step3 = customDialog_5.GetCustomDialogProperty( "radioButton3.IsChecked" );
            blnDetails_Step4 = customDialog_5.GetCustomDialogProperty( "radioButton4.IsChecked" );
            blnDetails_Step5 = customDialog_5.GetCustomDialogProperty( "radioButton5.IsChecked" );
            blnDetails_Step6 = customDialog_5.GetCustomDialogProperty( "radioButton6.IsChecked" );
            blnDetails_Step7 = customDialog_5.GetCustomDialogProperty( "radioButton7.IsChecked" );
            blnDetails_Step8 = customDialog_5.GetCustomDialogProperty( "radioButton8.IsChecked" );
            blnDetails_Step9 = customDialog_5.GetCustomDialogProperty( "radioButton9.IsChecked" );
            blnDetails_Step10 = customDialog_5.GetCustomDialogProperty( "radioButton10.IsChecked" );
            blnDetails_Step11 = customDialog_5.GetCustomDialogProperty( "radioButton11.IsChecked" );
            if (rtnValue == 1)
            {
              break;
            }
          }
        }
      }
      else
      {
        break;
      }
    }
  }
}

private function C_LoadInstructions(  ) void {
  private dialog customDialog_8;
  private dialog dialogHandle_9;
  private dialog customDialog_10;
  private dialog customDialog_11;
  private dialog customDialog_12;
  private dialog customDialog_13;
  private variable strLoadingMessageScanSrc;
  private variable strScannedBedDest;
  private variable strLinkImage;
  private variable strScannedBedSource;
  private variable intIndexCounter;
  private variable strLoadingMessageScanSrcBed;
  private variable strLoadMessageDestBed;
  private variable strScannedDest;
  private variable loopCounter3;
  private variable intTipsNeeded;
  private variable strLoadingMessageScanDest;
  private variable strScannedSource;
  private variable arrBedsBarcodesDest[];
  private variable arrBedsBarcodesSource[];
  private variable intSeqCap;
  private variable strLoadMessage;
  private dialog customDialog_14;
  private variable rtnValue;
  private variable strImageLinkDest;
  private variable strImageLinkSrc;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                LOAD INSTRUCTIONS: START\n**************************************************************************************************************************"));
  intSeqCap = intNumberOfSourcePlates * 96;
  ML_STAR.Load_SourcePlates.SetCount(intSeqCap);
  ML_STAR.Load_BindingPlates.SetCount(intSeqCap);
  ML_STAR.Load_DestinationPlates.SetCount(intSeqCap);
  ML_STAR.Load_Magnets.SetCount(intSeqCap);
  strLoadMessage = StrConcat4(Translate("Please load "), Translate("150mL of ethanol"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Waste, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load "), Translate("150mL of elution buffer"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Waste, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load a deep-well plate containing"), Translate("150uL per well of SPRI beads"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Waste, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load an empty waste reservoir"), Translate(""), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Waste, strLoadMessage);
  intTipsNeeded = intPlateCount * 480;
  if(0){
    arrBedsBarcodesSource.SetSize(0);
    arrBedsBarcodesSource.AddAsLast(Translate("Source1"));
    arrBedsBarcodesSource.AddAsLast(Translate("Source2"));
    arrBedsBarcodesDest.SetSize(0);
    arrBedsBarcodesDest.AddAsLast(Translate("Dest1"));
    arrBedsBarcodesDest.AddAsLast(Translate("Dest2"));
    intIndexCounter = 0;
    intIndexCounter = intIndexCounter + 1;
    {
      for(loopCounter3 = 0; loopCounter3 < intPlateCount;)
      {
        loopCounter3 = loopCounter3 + 1;
        strLoadingMessageScanSrc = StrConcat4(Translate("Scan the SOURCE "), loopCounter3, Translate(" PLATE for the source plate"), Translate(""));
        strLoadingMessageScanSrcBed = StrConcat4(Translate("Scan the SOURCE  "), loopCounter3, Translate(" BED for the source plate"), Translate(""));
        strLinkImage = StrConcat4(Translate("link"), loopCounter3, Translate(""), Translate(""));
        customDialog_10.InitCustomDialog("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");
        customDialog_10.SetCustomDialogProperty( "textBlock1.Text", strLoadingMessageScanSrc );
        customDialog_10.SetCustomDialogProperty( "textBlock2.Text", strLoadingMessageScanSrcBed );
        customDialog_10.SetCustomDialogProperty( "image2.Source", strImageLinkSrc );
        customDialog_10.ShowCustomDialog();
        strScannedSource = customDialog_10.GetCustomDialogProperty( "textBox1.Text" );
        strScannedBedSource = customDialog_10.GetCustomDialogProperty( "textBox3.Text" );
        strLoadingMessageScanDest = StrConcat4(Translate("Scan the DESTINATION "), loopCounter3, Translate(" PLATE for the source plate"), Translate(""));
        strLoadMessageDestBed = StrConcat4(Translate("Scan the DESTINATION "), loopCounter3, Translate(" BED for the source plate"), Translate(""));
        customDialog_12.InitCustomDialog("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");
        customDialog_12.SetCustomDialogProperty( "textBlock1.Text", strLoadingMessageScanDest );
        customDialog_12.SetCustomDialogProperty( "textBlock2.Text", strLoadMessageDestBed );
        customDialog_12.SetCustomDialogProperty( "image2.Source", strImageLinkDest );
        customDialog_12.ShowCustomDialog();
        strScannedDest = customDialog_12.GetCustomDialogProperty( "textBox1.Text" );
        strScannedBedDest = customDialog_12.GetCustomDialogProperty( "textBox3.Text" );
        if (strScannedDest != strScannedSource)
        {
          customDialog_8.InitCustomDialog("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");
          customDialog_8.ShowCustomDialog();
          abort;
        }
        else
        {
          if (strScannedBedSource != arrBedsBarcodesSource.ElementAt( loopCounter3 -1))
          {
            customDialog_13.InitCustomDialog("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");
            customDialog_13.ShowCustomDialog();
            abort;
          }
          if (strScannedBedDest != arrBedsBarcodesDest.ElementAt( loopCounter3 -1))
          {
            customDialog_11.InitCustomDialog("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");
            customDialog_11.ShowCustomDialog();
            abort;
          }
        }
      }
    }
  }
  customDialog_14.InitCustomDialog("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");
  customDialog_14.ShowCustomDialog();
  rtnValue = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
}

private function D_PipettingSteps(  ) void {
  private variable loopCounter1;
  private timer tmrDNABind_Plate1;
  private timer tmrDNABind_Plate2;
  private variable loopCounter2;
  private timer tmrDNAPulldown_Plate1;
  private variable loopCounter3;
  private timer tmrDNAPulldown_Plate2;
  private variable loopCounter4;
  private variable loopCounter5;
  private variable loopCounter6;
  private timer tmrBeadDrying_Plate1;
  private timer tmrBeadDrying_Plate2;
  private variable intLLD_Disp;
  private variable intLLD;
  private variable intLLD_Asp;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                    PIPETTING STEPS: START\n**************************************************************************************************************************"));
  MECC::TraceComment(Translate("========== Step 0. Start Modules =========="));
  MECC::TraceComment(Translate("========== Step 0. Start Modules =========="));
  MECC::TraceComment(Translate("========== Step 1-3. DNA+Bead Bind =========="));
  {
    loopCounter1 = 0;
    while (
       (seqPCR_SourcePlates.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seqPCR_SourcePlates, 1);
      loopCounter1 = loopCounter1 + 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> loopCounter1: "), loopCounter1);
      MECC::TraceComment(Translate("========== Step 1. Transfer Beads =========="));
      MECC::TraceComment(Translate("----- Get LLD Settings -----"));
      if (intAspirateSubmerge_Bead == 0)
      {
        intLLD_Asp = 0;
      }
      else
      {
        intLLD_Asp = 5;
      }
      if (intDispenseSubmerge_Bead == 0)
      {
        intLLD_Disp = 0;
      }
      else
      {
        intLLD_Disp = 5;
      }
      MECC::TraceComment(Translate("----- Pickup Tips -----"));
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      MECC::TraceComment(Translate("----- Add SPRI Beads -----"));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      MECC::TraceComment(Translate("========== Step 2. Transfer DNA =========="));
      if (blnSourcePlateCleanup == 0)
      {
        MECC::TraceComment(Translate("----- Get LLD Settings -----"));
        if (intAspirateSubmerge_DNA == 0)
        {
          intLLD_Asp = 0;
        }
        else
        {
          intLLD_Asp = 5;
        }
        if (intDispenseSubmerge_DNA == 0)
        {
          intLLD_Disp = 0;
        }
        else
        {
          intLLD_Disp = 5;
        }
        MECC::TraceComment(Translate("----- Add DNA -----"));
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
      MECC::TraceComment(Translate("----- Eject Tips -----"));
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      MECC::TraceComment(Translate("========== Step 2.1 Eluate Top-Up =========="));
      MECC::TraceComment(Translate("========== Step 3. DNA Binding =========="));
      if (blnBind_HHS == 1)
      {
        _GetLabwareParameters();
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      if (loopCounter1 == 1)
      {
        if( 0 == tmrDNABind_Plate1.SetTimer(intDNABindTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started DNA binding timer #1 for "), intDNABeadBindingTime, Translate(" seconds"), Translate(""));
      }
      else
      {
        if (loopCounter1 == 2)
        {
          if( 0 == tmrDNABind_Plate2.SetTimer(intDNABindTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started DNA binding timer #2 for "), intDNABeadBindingTime, Translate(" seconds"), Translate(""));
        }
        else
        {
        }
      }
      if (blnBind_HHS == 1)
      {
        SeqIncrement(seqTrp_BindPlates, 1);
        SeqIncrement(seqTrp_BindOnHHS, 1);
      }
      SeqIncrement(seqPCR_SourcePlates, 96);
      SeqIncrement(seqDWP_BindPlates, 96);
      if (
         (seqPCR_SourcePlates.GetCurrentPosition() > 0 && seqPCR_SourcePlates.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seqPCR_SourcePlates.SetMax(seqPCR_SourcePlates.GetTotal());
    seqPCR_SourcePlates.SetCurrentPosition(1);
  }
  SeqResetSequenceIndexes(seqPCR_SourcePlates);
  SeqResetSequenceIndexes(seqDWP_BindPlates);
  if (blnBind_HHS == 1)
  {
    SeqResetSequenceIndexes(seqTrp_BindPlates);
    SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  }
  MECC::TraceComment(Translate("========== Step 4. Bead Pulldown =========="));
  {
    loopCounter2 = 0;
    while (
       (seqTrp_BindPlates.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seqTrp_BindPlates, 1);
      loopCounter2 = loopCounter2 + 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> loopCounter2: "), loopCounter2);
      if (loopCounter2 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #1"), Translate(""));
        if( 0 == tmrDNABind_Plate1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter2 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #2"), Translate(""));
          if( 0 == tmrDNABind_Plate2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("----- Move to Magnet -----"));
      if (blnBind_HHS == 1)
      {
        MECC::TraceComment(Translate("----- Stop Shakers -----"));
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      else
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      if (loopCounter2 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #1"), Translate(""));
        if( 0 == tmrDNAPulldown_Plate1.SetTimer(intBindPulldownTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter2 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #2"), Translate(""));
          if( 0 == tmrDNAPulldown_Plate2.SetTimer(intBindPulldownTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      if (blnBind_HHS == 1)
      {
        SeqIncrement(seqTrp_BindOnHHS, 1);
      }
      else
      {
        SeqIncrement(seqTrp_BindPlates, 1);
      }
      SeqIncrement(seqTrp_BindOnMagnet, 1);
      if (
         (seqTrp_BindPlates.GetCurrentPosition() > 0 && seqTrp_BindPlates.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seqTrp_BindPlates.SetMax(seqTrp_BindPlates.GetTotal());
    seqTrp_BindPlates.SetCurrentPosition(1);
  }
  if (blnBind_HHS == 1)
  {
    SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  }
  else
  {
    SeqResetSequenceIndexes(seqTrp_BindOnMagnet);
  }
  SeqResetSequenceIndexes(seqTrp_BindPlates);
  MECC::TraceComment(Translate("========== Step 5-11. Wash & Elution =========="));
  {
    loopCounter4 = 0;
    while (
       (seqDWP_BindOnMagnet.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seqDWP_BindOnMagnet, 1);
      loopCounter4 = loopCounter4 + 1;
      MECC::TraceComment(Translate("========== Step 5. Remove Supernatant =========="));
      if (loopCounter4 == 1)
      {
        if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter4 == 1)
        {
          if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("----- Get LLD Settings -----"));
      if (intAspirateSubmerge_Supernatant == 0)
      {
        intLLD_Asp = 0;
      }
      else
      {
        intLLD_Asp = 5;
      }
      MECC::TraceComment(Translate("----- Pickup Tips -----"));
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      MECC::TraceComment(Translate("----- Eject Tips -----"));
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      MECC::TraceComment(Translate("========== Step 6. Wash =========="));
      {
        for(loopCounter5 = 0; loopCounter5 < intEthanolWashCycles;)
        {
          loopCounter5 = loopCounter5 + 1;
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
      MECC::TraceComment(Translate("========== Step 7. Drying =========="));
      MECC::TraceComment(Translate("----- Move to Home -----"));
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      if (loopCounter4 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Bead Drying Timer #1"), Translate(""));
        if( 0 == tmrDNAPulldown_Plate1.SetTimer(intBeadDryingTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter4 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Bead Drying Timer #2"), Translate(""));
          if( 0 == tmrDNAPulldown_Plate1.SetTimer(intBeadDryingTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("========== Step 8. Transfer Eluate =========="));
      if (loopCounter4 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Drying Timer #1"), Translate(""));
        if( 0 == tmrBeadDrying_Plate1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter4 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Drying Timer #1"), Translate(""));
          if( 0 == tmrBeadDrying_Plate2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      if(0){
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      }
      if(0){
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
      if(0){
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
      MECC::TraceComment(Translate("========== Step 9. Incubation =========="));
      if (blnDNABindShake == 1)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        SeqIncrement(seqTrp_BindPlates, 1);
        SeqIncrement(seqTrp_BindOnHHS, 1);
        if (loopCounter4 == 1)
        {
          if( 0 == tmrDNABind_Plate1.SetTimer(intDNABindTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started DNA binding timer #1 for "), intDNABeadBindingTime, Translate(" seconds"), Translate(""));
        }
        else
        {
          if (loopCounter4 == 2)
          {
            if( 0 == tmrDNABind_Plate2.SetTimer(intDNABindTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started DNA binding timer #2 for "), intDNABeadBindingTime, Translate(" seconds"), Translate(""));
          }
          else
          {
          }
        }
      }
      MECC::TraceComment(Translate("========== Step 10. Bead Pulldown =========="));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> loopCounter3: "), loopCounter3);
      if (loopCounter4 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #1"), Translate(""));
        if( 0 == tmrDNABind_Plate1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter4 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #2"), Translate(""));
          if( 0 == tmrDNABind_Plate2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("----- Move to Magnet -----"));
      if (blnDNABindShake >= 1)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      else
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      if (loopCounter4 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #1"), Translate(""));
        if( 0 == tmrDNAPulldown_Plate1.SetTimer(intDNABindPulldownTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter4 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #2"), Translate(""));
          if( 0 == tmrDNAPulldown_Plate2.SetTimer(intDNABindPulldownTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("========== Step 11. Recover DNA =========="));
      if (loopCounter4 == 1)
      {
        if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter4 == 1)
        {
          if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("----- Pickup Tips -----"));
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      MECC::TraceComment(Translate("----- Eject Tips -----"));
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      SeqIncrement(seqDWP_BindOnMagnet, 96);
      if (
         (seqDWP_BindOnMagnet.GetCurrentPosition() > 0 && seqDWP_BindOnMagnet.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seqDWP_BindOnMagnet.SetMax(seqDWP_BindOnMagnet.GetTotal());
    seqDWP_BindOnMagnet.SetCurrentPosition(1);
  }
}

private function _GetPipelineVariables( variable i_strConfigFilePath, variable i_strPipeline ) void {
  private variable __[];
  private variable _;
  private variable strBeadType;
  private variable strJSONSearch;
  private variable strEthanolConcentration;
  private variable _strJSONPrefix;
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Processing_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("CleanUp_In_Source_Plate"));
  blnSourcePlateCleanup = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step1_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Bead_Volume"));
  intBeadVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Bead_Type"));
  strBeadType = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Submerge_Depth"));
  intAspirateSubmerge_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  if (intAspirateSubmerge_Bead == 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Fix_Height"));
    intAspirateHeight_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Retract_Height"));
    intAspirateRetract_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Mix_Cycles"));
  intAspirateMixCycles_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  if (intAspirateMixCycles_Bead != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Mix_Volume"));
    intAspirateMixVolume_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Submerge_Depth"));
  intDispenseSubmerge_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  if (intDispenseSubmerge_Bead == 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Fix_Height"));
    intDispenseHeight_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Retract_Height"));
    intDispenseRetract_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Mix_Cycles"));
  intDispenseMixCycles_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  if (intDispenseMixCycles_Bead != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Mix_Volume"));
    intDispenseMixVolume_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Liquid_Class"));
  strLC_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step2_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Bead_Volume"));
  intDNAVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Submerge_Depth"));
  intAspirateSubmerge_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  if (intAspirateSubmerge_Bead == 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Fix_Height"));
    intAspirateHeight_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Retract_Height"));
    intAspirateRetract_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Mix_Cycles"));
  intAspirateMixCycles_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  if (intAspirateMixCycles_Bead != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Mix_Volume"));
    intAspirateMixVolume_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Submerge_Depth"));
  intDispenseSubmerge_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  if (intDispenseSubmerge_Bead == 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Fix_Height"));
    intDispenseHeight_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Retract_Height"));
    intDispenseRetract_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Mix_Cycles"));
  intDispenseMixCycles_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  if (intDispenseMixCycles_Bead != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Mix_Volume"));
    intDispenseMixVolume_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Liquid_Class"));
  strLC_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step3_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Bind_Time"));
  intDNABindTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("HHS_Shake"));
  intBind_Shake = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Bind_Heat"));
  intBind_Temp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  blnBind_HHS = 0;
  if (intBind_Shake != 0)
  {
    blnBind_HHS = 1;
  }
  if (intBind_Temp != 0)
  {
    blnBind_HHS = 1;
  }
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step4_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Pulldown_Time"));
  intBindPulldownTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step5_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Retain_Supernatant"));
  blnRetainSupernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Supernatant_Volume"));
  intSupernatantVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Liquid_Class"));
  strLC_Supernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Submerge_Depth"));
  intAspirateSubmerge_Supernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  if (intAspirateSubmerge_Supernatant == 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Fix_Height"));
    intAspirateHeight_Supernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Retract_Height"));
    intAspirateRetract_Supernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Mix_Cycles"));
  intAspirateMixCycles_Supernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 0, __);
  if (intAspirateMixCycles_Supernatant != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Aspirate_Mix_Volume"));
    intAspirateMixVolume_Supernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Fix_Height"));
  intDispenseHeight_Supernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Dispense_Retract_Height"));
  intDispenseRetract_Supernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, intTraceLevel, 1, __);
}

private function B_CreateSequences(  ) void {
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                 SEQUENCE CREATION: START\n**************************************************************************************************************************"));
  SeqCopySequence(seqRes_BindingBeads, ML_STAR.res_Beads);
  SeqCopySequence(seqRes_WashBuffer, ML_STAR.res_Ethanol);
  SeqCopySequence(seqTips, ML_STAR.NTR_Tips);
  if (blnSourcePlateCleanup == 1)
  {
    SeqCopySequence(seqDWP_BindPlates, ML_STAR.DWP_BindPlates);
  }
  else
  {
    SeqCopySequence(seqDWP_BindPlates, ML_STAR.PCR_SourcePlates);
  }
  SeqCopySequence(seqPCR_SourcePlates, ML_STAR.PCR_SourcePlates);
  SeqCopySequence(seqTrp_BindPlates, ML_STAR.trp_BindPlates_Home);
  SeqCopySequence(seqTrp_BindOnMagnet, ML_STAR.trp_BindPlates_Magnet);
  SeqCopySequence(seqDWP_BindOnMagnet, ML_STAR.DWP_BindOnMagnet);
  SeqCopySequence(seqTrp_BindOnHHS, ML_STAR.trp_BindPlates_HHS);
  SeqCopySequence(seqWaste, ML_STAR.res_Waste);
  if (blnRetainSupernatant == 1)
  {
    SeqCopySequence(seqSupernatantWaste, ML_STAR.COREGripTool_OnWaste_1000ul_0001);
  }
  else
  {
    SeqCopySequence(seqSupernatantWaste, ML_STAR.res_Waste);
  }
}

private function _GetJSONValue( variable i_strFilePath, variable i_strSearch, variable i_intTrace, variable i_blnForceCheck, variable & o_arr[] ) variable {
  private variable varJSON;
  private variable i_strConfigFilePath;
  private variable strJSONSearch;
  private variable __[];
  private variable o_var;
  private variable i_strJSONSearchString;
  private variable _varType;
  private variable i_var;
  private variable i_blnForceFill;
  private variable _intArrSize;
  private variable _blnArray;
  o_arr.SetSize( 0);
  JSONSEARCH::GetJSONEntry(i_strFilePath, i_strSearch, i_intTrace, o_arr, o_var);
  _blnArray = 0;
  _varType = StrGetType(o_var);
  if (_varType == "s")
  {
    if (o_var == "")
    {
      if (i_blnForceCheck == 1)
      {
        _blnArray = 1;
      }
    }
  }
  else
  {
    if (_varType == "i")
    {
      if (o_var == 0)
      {
        if (i_blnForceCheck == 1)
        {
          _blnArray = 1;
        }
      }
    }
    else
    {
      if (_varType == "f")
      {
        if (o_var == 0)
        {
          if (i_blnForceCheck == 1)
          {
            _blnArray = 1;
          }
        }
      }
      else
      {
        _blnArray = 1;
      }
    }
  }
  if (_blnArray == 1)
  {
    _intArrSize=o_arr.GetSize();
    if (_intArrSize == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Issue with strJSONSearch: "), i_strJSONSearchString);
      abort;
    }
  }
  return (o_var);
}

private function _GetLabwareParameters(  ) void {
}
